// Example parameter file for rotation registration
// C-style comments: //

// The internal pixel type, used for internal computations
// Leave to float in general. 
// NB: this is not the type of the input images! The pixel 
// type of the input images is automatically read from the 
// images themselves.
// This setting can be changed to "short" to save some memory
// in case of very large 3D images.
(FixedInternalImagePixelType "float")
(MovingInternalImagePixelType "float")

// The dimensions of the fixed and moving image
// NB: This has to be specified by the user. The dimension of
// the images is currently NOT read from the images.
// Also note that some other settings may have to specified
// for each dimension separately.
//(FixedImageDimension 2)
//(MovingImageDimension 2)

// Specify whether you want to take into account the so-called
// direction cosines of the images. Recommended: true.
// In some cases, the direction cosines of the image are corrupt,
// due to image format conversions for example. In that case, you 
// may want to set this option to "false".
(UseDirectionCosines "false")

// **************** Main Components **************************

// The following components should usually be left as they are:
//(Registration "MultiResolutionRegistration")
(Registration "MultiMetricMultiResolutionRegistration")
(Interpolator "BSplineInterpolator")
(ResampleInterpolator "FinalBSplineInterpolator")
(Resampler "DefaultResampler")

// These may be changed to Fixed/MovingRecursiveSmoothingImagePyramid.
// See the manual.
(FixedImagePyramid "FixedSmoothingImagePyramid")
(MovingImagePyramid "MovingSmoothingImagePyramid")

// The following components are most important:
// The optimizer AdaptiveStochasticGradientDescent (ASGD) works
// quite ok in general. The Transform and Metric are important
// and need to be chosen careful for each application. See manual.
(Optimizer "AdaptiveStochasticGradientDescent")



// ********************************** **************************
// ********************************** **************************
//(Transform "BSplineTransform")
(Transform "RecursiveBSplineTransform")
// ********************************** **************************

//(Metric "AdvancedMattesMutualInformation")
// (Metric "AdvancedNormalizedCorrelation")

//(Metric "AdvancedMattesMutualInformation")

(Metric "AdvancedMattesMutualInformation" "TransformBendingEnergyPenalty")
(Metric0Weight 1.0)
(Metric1Weight 100.0)

(FinalGridSpacingInVoxels  30)

// The step size of the optimizer, in mm. By default the voxel size is used.
// which usually works well. In case of unusual high-resolution images
// (eg histology) it is necessary to increase this value a bit, to the size
// of the "smallest visible structure" in the image:
//(MaximumStepLength 0.29)

(MaximumNumberOfIterations 1000)

(NumberOfResolutions 4)
(ImagePyramidSchedule 1 1  0 0 0 0 0 0)

// ********************************** **************************
// ********************************** **************************
// ***************** Transformation **************************

// Scales the rotations compared to the translations, to make
// sure they are in the same range. In general, it's best to  
// use automatic scales estimation:
//(AutomaticScalesEstimation "true")

// Automatically guess an initial translation by aligning the
// geometric centers of the fixed and moving.
//(AutomaticTransformInitialization "true")



// Whether transforms are combined by composition or by addition.
// In generally, Compose is the best option in most cases.
// It does not influence the results very much.
(HowToCombineTransforms "Compose")

// ******************* Similarity measure *********************

// Number of grey level bins in each resolution level,
// for the mutual information. 16 or 32 usually works fine.
// You could also employ a hierarchical strategy:
//(NumberOfHistogramBins 16 32 64)
(NumberOfHistogramBins 32)

// If you use a mask, this option is important. 
// If the mask serves as region of interest, set it to false.
// If the mask indicates which pixels are valid, then set it to true.
// If you do not use a mask, the option doesn't matter.
(ErodeMask "false")


// or define (experimental):
//(Metric0RelativeWeight 1.0)
//(Metric1RelativeWeight 0.1)



// ******************** Multiresolution **********************

// The downsampling/blurring factors for the image pyramids.
// By default, the images are downsampled by a factor of 2
// compared to the next resolution.
// So, in 2D, with 4 resolutions, the following schedule is used:
//(ImagePyramidSchedule 8 8  4 4  2 2  1 1 )
// And in 3D:

// You can specify any schedule, for example:
//(ImagePyramidSchedule 4 4  4 3  2 1  1 1 )
// Make sure that the number of elements equals the number
// of resolutions times the image dimension.



// **************** Image sampling **********************
(NewSamplesEveryIteration "true")
(ImageSampler "Random")
// ************* Interpolation and Resampling ****************
(BSplineInterpolationOrder 3)
(FinalBSplineInterpolationOrder 3)
(DefaultPixelValue 0)
(WriteResultImage "true")
(ResultImagePixelType "float")
(ResultImageFormat "mhd")

(MaximumNumberOfSamplingAttempts 1000)
(RequiredRatioOfValidSamples 0.01)





